PsychoPy2experiment version="2026.1.3"
Settings
  Audio lib = ptb
  Data filename = u'data/%s_MAIA_%s' % (expInfo['participant'], expInfo['date'])
  End Message = 설문에 참여해 주셔서 감사합니다.
  Experiment info = {'participant': '000', 'session': '001', 'age': '', 'sex': ['F', 'M', 'other']}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1280, 720)
  color = $[-1,-1,-1]
  expName = MAIA_Survey
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine MAIA_Intro
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    CodeComponent code_maia_intro
      Code Type = Py
      Before Experiment:
        import os, sys
        try:
            sys.stdout.reconfigure(encoding='utf-8', errors='replace')
            sys.stderr.reconfigure(encoding='utf-8', errors='replace')
        except Exception:
            pass
        print('[maia] === Before Experiment ===')
        from psychopy import event
      Begin Experiment:
        print('[maia] === Begin Experiment ===')

        # 공용 자극
        prog_stim = visual.TextStim(win, name='prog_stim', text='', height=0.030,
                                    color=(0.2, 0.2, 0.2), pos=(0, 0.43),
                                    alignText='center')
        item_stim = visual.TextStim(win, name='item_stim', text='', height=0.052,
                                    color='white', pos=(0, 0.14), wrapWidth=1.5,
                                    alignText='center')
        scale_stim = visual.TextStim(win, name='scale_stim', text='', height=0.038,
                                     color='white', pos=(0, -0.18), wrapWidth=1.6,
                                     alignText='center')
        msg_stim = visual.TextStim(win, name='msg_stim', text='', height=0.045,
                                   color='white', pos=(0, 0), wrapWidth=1.5,
                                   alignText='center')

        # 척도 안내 텍스트 (0–5)
        SCALE_TEXT = ('0  전혀 그렇지 않다      …      5  항상 그렇다\n\n'
                      '0      1      2      3      4      5\n\n'
                      '해당하는 숫자 키(0–5)를 누르세요')

        # 하위척도 점수 누적 (역채점 반영 후)
        _subscale_scores = {}
        _resp_count = 0

        thisExp.addData('age', expInfo.get('age', ''))
        thisExp.addData('sex', expInfo.get('sex', ''))
      Each Frame:
        msg_stim.text = ('신체 감각 자각 설문 (MAIA)\n\n'
                         '아래 문항들이 평소 자신에게 얼마나 해당하는지\n'
                         '0(전혀 그렇지 않다)부터 5(항상 그렇다)까지로 응답하세요.\n\n'
                         '정답은 없으며, 떠오르는 대로 솔직하게 답하시면 됩니다.\n\n'
                         '총 24문항 · 약 5–10분 소요\n\n'
                         '준비되면 스페이스바를 누르세요.')
        msg_stim.draw()
        _k = event.getKeys(keyList=['space', 'escape'])
        if 'escape' in _k:
            core.quit()
        if 'space' in _k:
            continueRoutine = False
    TextComponent _keep
      letterHeight = 0.05
      opacity = 0
      saveStartStop = False
      startVal [time (s)] = 0
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  Routine MAIA_Item
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    CodeComponent code_maia_item
      Code Type = Py
      Begin Routine:
        _resp = None
        _item_onset = core.getTime()
        event.clearEvents()
      Each Frame:
        prog_stim.text = f'{maia_loop.thisN + 1} / {maia_loop.nTotal}'
        item_stim.text = str(item_text)
        scale_stim.text = SCALE_TEXT
        prog_stim.draw()
        item_stim.draw()
        scale_stim.draw()
        _k = event.getKeys(keyList=['0', '1', '2', '3', '4', '5', 'escape'])
        if 'escape' in _k:
            core.quit()
        if _k:
            _resp = int(_k[0])
            continueRoutine = False
      End Routine:
        try:
            _rev = int(float(reverse))
        except Exception:
            _rev = 0
        _scored = (5 - _resp) if (_rev == 1 and _resp is not None) else _resp
        thisExp.addData('item_num', item_num)
        thisExp.addData('subscale', subscale)
        thisExp.addData('reverse', _rev)
        thisExp.addData('response_raw', _resp)
        thisExp.addData('response_scored', _scored)
        thisExp.addData('rt', round(core.getTime() - _item_onset, 4))
        if _scored is not None:
            _subscale_scores.setdefault(str(subscale), []).append(_scored)
            _resp_count += 1
    TextComponent _keep
      letterHeight = 0.05
      opacity = 0
      saveStartStop = False
      startVal [time (s)] = 0
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  Routine MAIA_End
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    CodeComponent code_maia_end
      Code Type = Py
      Begin Routine:
        # 8개 하위척도 평균(역채점 반영) 계산
        _SUBSCALE_ORDER = ['Noticing', 'Not-Distracting', 'Not-Worrying',
                           'Attention-Regulation', 'Emotional-Awareness',
                           'Self-Regulation', 'Body-Listening', 'Trusting']
        _summary = {}
        _all_vals = []
        for _sub in _SUBSCALE_ORDER:
            _vals = _subscale_scores.get(_sub, [])
            if _vals:
                _m = sum(_vals) / len(_vals)
                _all_vals += _vals
            else:
                _m = float('nan')
            _summary[_sub] = _m
            thisExp.addData('MAIA_' + _sub.replace('-', '_'), round(_m, 4))
        _overall = (sum(_all_vals) / len(_all_vals)) if _all_vals else float('nan')
        thisExp.addData('MAIA_overall_mean', round(_overall, 4))
        thisExp.addData('MAIA_n_answered', _resp_count)
        print('[maia] subscale means:')
        for _sub in _SUBSCALE_ORDER:
            print(f'   {_sub:22s} {_summary[_sub]:.3f}')
        print(f'   {"OVERALL":22s} {_overall:.3f}  (n={_resp_count}/24)')

        # 분석 편의용 별도 요약 CSV 저장
        try:
            import csv as _csv
            _base = thisExp.dataFileName  # 확장자 없는 경로
            _sum_path = _base + '_subscales.csv'
            _d = os.path.dirname(_sum_path)
            if _d and not os.path.isdir(_d):
                os.makedirs(_d, exist_ok=True)
            with open(_sum_path, 'w', newline='', encoding='utf-8-sig') as _f:
                _w = _csv.writer(_f)
                _w.writerow(['participant', 'session', 'age', 'sex',
                             'subscale', 'mean_score', 'n_items'])
                _pid = expInfo.get('participant', '')
                _ses = expInfo.get('session', '')
                _age = expInfo.get('age', '')
                _sex = expInfo.get('sex', '')
                for _sub in _SUBSCALE_ORDER:
                    _vals = _subscale_scores.get(_sub, [])
                    _mean = (sum(_vals) / len(_vals)) if _vals else ''
                    _w.writerow([_pid, _ses, _age, _sex, _sub,
                                 (round(_mean, 4) if _vals else ''), len(_vals)])
                _w.writerow([_pid, _ses, _age, _sex, 'OVERALL',
                             (round(_overall, 4) if _all_vals else ''), _resp_count])
            print('[maia] 요약 저장:', _sum_path)
        except Exception as _e:
            print('[maia] 요약 CSV 저장 실패:', repr(_e))
      Each Frame:
        msg_stim.text = ('설문이 끝났습니다.\n\n참여해 주셔서 감사합니다.\n\n'
                         '스페이스바를 누르면 종료됩니다.')
        msg_stim.draw()
        if 'space' in event.getKeys(keyList=['space']):
            continueRoutine = False
    TextComponent _keep
      letterHeight = 0.05
      opacity = 0
      saveStartStop = False
      startVal [time (s)] = 0
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Flow
  Routine MAIA_Intro
  LoopInitiator maia_loop loopType="TrialHandler"
    conditionsFile = conditions/maia_items.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'item_num': 1, 'item_text': '나는 몸에서 불편감이 느껴지면, 그것을 바로 알아차린다.', 'subscale': 'Noticing', 'reverse': 0},
      {'item_num': 2, 'item_text': '나는 정확하게 내 몸의 어느 부위가 편안하게 느껴지는지 알아차린다.', 'subscale': 'Noticing', 'reverse': 0},
      {'item_num': 3, 'item_text': '나는 호흡의 변화, 즉 호흡이 느려지거나 빨라지는 것을 알아차린다.', 'subscale': 'Noticing', 'reverse': 0},
      {'item_num': 4, 'item_text': '나는 불편한 감각이 느껴지면, 그것을 주의깊게 관찰한다.', 'subscale': 'Not-Distracting', 'reverse': 0},
      {'item_num': 5, 'item_text': '나는 불편한 감정을 무언가에 집중함으로써 밀어낸다.', 'subscale': 'Not-Distracting', 'reverse': 1},
      {'item_num': 6, 'item_text': '불쾌한 신체 감각을 느낄 때, 그것을 느끼지 않기 위해 다른 무언가에 나를 몰두시킨다.', 'subscale': 'Not-Distracting', 'reverse': 1},
      {'item_num': 7, 'item_text': '나는 몸에서 통증을 느껴도 별로 당황하지 않는다.', 'subscale': 'Not-Worrying', 'reverse': 0},
      {'item_num': 8, 'item_text': '나는 몸에서 어떤 불편함을 느껴도 별로 걱정하지 않는다.', 'subscale': 'Not-Worrying', 'reverse': 0},
      {'item_num': 9, 'item_text': '불편함이나 통증을 느낄 때, 그것이 머릿속에서 떠나지 않는다.', 'subscale': 'Not-Worrying', 'reverse': 1},
      {'item_num': 10, 'item_text': '나는 주변에서 많은 일이 일어나고 있어도 내부 신체감각에 대한 자각을 유지할 수 있다.', 'subscale': 'Attention-Regulation', 'reverse': 0},
      {'item_num': 11, 'item_text': '나는 산만해지더라도, 다시 몸으로 주의를 돌릴 수 있다.', 'subscale': 'Attention-Regulation', 'reverse': 0},
      {'item_num': 12, 'item_text': '나는 생각에서 몸의 감각으로 주의를 되돌릴 수 있다.', 'subscale': 'Attention-Regulation', 'reverse': 0},
      {'item_num': 13, 'item_text': '평화로운 마음을 경험하고 나면, 내 몸이 다르게 느껴지는 것을 알아차린다.', 'subscale': 'Emotional-Awareness', 'reverse': 0}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
    Routine MAIA_Item
  LoopTerminator maia_loop
  Routine MAIA_End
