PsychoPy2experiment version="2026.1.3"
Settings
  Audio lib = ptb
  End Message = 참여해 주셔서 감사합니다.
  Experiment info = {'participant': '000', 'session': '001', 'feedback_modality': ['auditory', 'visual'], 'baseline_bpm': '', 'caffeine': ['no', 'yes'], 'smoking': ['no', 'yes'], 'age': '', 'sex': ['F', 'M', 'other']}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1280, 720)
  color = $[-1,-1,-1]
  expName = fNIRS_FalseCardiacFeedback
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine Intro
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    CodeComponent code_intro
      Code Type = Py
      Before Experiment:
        import os, sys
        try:
            sys.stdout.reconfigure(encoding='utf-8', errors='replace')
            sys.stderr.reconfigure(encoding='utf-8', errors='replace')
        except Exception:
            pass
        print('[fcf] === Before Experiment ===')

        _here = os.path.dirname(os.path.abspath(__file__))
        if _here not in sys.path:
            sys.path.insert(0, _here)

        import biofeedback_inline as bf
        import ecg_renderer
        from psychopy import event

        # fNIRS 동기 마커 outlet (LSL 있으면 사용, 없으면 더미). 모든 push는 events CSV
        # 로깅(bf.log_marker)에도 기록되어 사후 SNIRF aux1 삽입 소스가 된다.
        class _NullOutlet:
            def push_sample(self, *a, **k):
                pass
        outlet = _NullOutlet()
        try:
            from pylsl import StreamInfo, StreamOutlet
            info = StreamInfo('PsychoPyMarkers', 'Markers', 1, 0, 'string', 'psychopy_markers')
            outlet = StreamOutlet(info)
            print('[fcf] LSL outlet PsychoPyMarkers up')
        except Exception as _e:
            print(f'[fcf] LSL outlet unavailable: {_e!r}')

        class _LoggingOutlet:
            def __init__(self, inner):
                self._inner = inner
            def push_sample(self, x, *a, **k):
                try:
                    self._inner.push_sample(x, *a, **k)
                except Exception:
                    pass
                try:
                    _lab = x[0] if isinstance(x, (list, tuple)) else x
                    bf.log_marker(str(_lab))
                except Exception:
                    pass
        outlet = _LoggingOutlet(outlet)
      Begin Experiment:
        print('[fcf] === Begin Experiment ===')

        # 모달리티: auditory(심박음) / visual(박동 하트)
        modality = str(expInfo.get('feedback_modality', 'auditory')).strip().lower()
        audio_mode = (modality == 'auditory')
        print(f'[fcf] feedback_modality = {modality}  (audio_mode={audio_mode})')

        # 고정 BPM 백엔드 시작 (오디오 모드면 소리 ON, 시각 모드면 음소거)
        bf.start_fixed(audio_on=audio_mode)

        # 시각 박동 렌더러 (시각 모드 전용이지만 init은 항상)
        try:
            ecg_renderer.init(win)
            _ecg_ok = True
        except Exception as _e:
            print(f'[fcf] ecg_renderer init failed: {_e!r}')
            _ecg_ok = False

        # 공용 자극 stim
        fix_stim = visual.TextStim(win, name='fix_stim', text='+', height=0.10,
                                   color='white', pos=(0, 0))
        msg_stim = visual.TextStim(win, name='msg_stim', text='', height=0.045,
                                   color='white', pos=(0, 0.36), wrapWidth=1.4,
                                   alignText='center')
        q_stim = visual.TextStim(win, name='q_stim', text='', height=0.052,
                                 color='white', pos=(0, 0.05), wrapWidth=1.5,
                                 alignText='center')
        status_stim = visual.TextStim(win, name='status_stim', text='', height=0.026,
                                      color=(-0.2, -0.2, -0.2), pos=(0, -0.45),
                                      wrapWidth=1.6, alignText='center')

        # 5개 고정 조건 (70 BPM 표준 대비 편차)
        CONDITIONS = [
            {'cond': 'C1', 'bpm': 53, 'dev': -25, 'label': 'C1_53', 'accel': False},
            {'cond': 'C2', 'bpm': 60, 'dev': -15, 'label': 'C2_60', 'accel': False},
            {'cond': 'C3', 'bpm': 70, 'dev':   0, 'label': 'C3_70', 'accel': False},
            {'cond': 'C4', 'bpm': 81, 'dev':  15, 'label': 'C4_81', 'accel': True},
            {'cond': 'C5', 'bpm': 88, 'dev':  25, 'label': 'C5_88', 'accel': True},
        ]
        N_REPS_PER_COND = 2

        # 참가자 번호로 시드 (재현성) + 연속 가속(C4/C5) 금지 제약
        import random as _random
        try:
            _seed = int(''.join(ch for ch in str(expInfo.get('participant', '0')) if ch.isdigit()) or '0')
        except Exception:
            _seed = 0
        _rng = _random.Random(_seed)

        def _gen_block_sequence():
            base = []
            for c in CONDITIONS:
                base += [c] * N_REPS_PER_COND
            for _ in range(5000):
                _rng.shuffle(base)
                ok = True
                for i in range(1, len(base)):
                    if base[i]['accel'] and base[i - 1]['accel']:
                        ok = False
                        break
                if ok:
                    return list(base)
            print('[fcf] WARN: 연속 가속 제약을 만족하는 순서를 못 찾음 — 무작위 순서 사용')
            return list(base)

        block_sequence = _gen_block_sequence()
        print('[fcf] block order:', [b['label'] for b in block_sequence])

        # 공변량 저장
        def _to_float(x):
            try:
                return float(str(x).strip())
            except Exception:
                return float('nan')
        thisExp.addData('block_order', ','.join(b['label'] for b in block_sequence))
        thisExp.addData('feedback_modality', modality)
        thisExp.addData('baseline_bpm_smartwatch', _to_float(expInfo.get('baseline_bpm', '')))
        thisExp.addData('caffeine', expInfo.get('caffeine', ''))
        thisExp.addData('smoking', expInfo.get('smoking', ''))
        thisExp.addData('age', expInfo.get('age', ''))
        thisExp.addData('sex', expInfo.get('sex', ''))
      Each Frame:
        q_stim.text = ('심박 지각 실험에 오신 것을 환영합니다.\n\n'
                       '한 손가락을 반대쪽 손목 맥박 위에 가볍게 올려두고\n'
                       '실험 내내 그 자세를 유지하세요.\n\n'
                       + ('각 구간에서 들리는 심장 박동 소리와\n' if audio_mode
                          else '각 구간에서 보이는 심장 박동과\n')
                       + '본인의 손목 맥박을 비교하게 됩니다.\n\n'
                       '준비되면 스페이스바를 누르세요.')
        q_stim.draw()
        if 'space' in event.getKeys(keyList=['space']):
            continueRoutine = False
        if 'escape' in event.getKeys(keyList=['escape']):
            core.quit()
    TextComponent _keep
      letterHeight = 0.05
      opacity = 0
      saveStartStop = False
      startVal [time (s)] = 0
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  Routine BaselineBPM
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    CodeComponent code_baseline_bpm
      Code Type = Py
      Begin Routine:
        bf.set_phase('baseline_bpm')
        _BBPM_MEAS_DUR = 60.0          # 측정 타이머(초)
        _bbpm_mode = 'measure'         # 'measure' → 'entry'
        # 시작 다이얼로그에 미리 적어둔 값이 있으면 입력칸에 프리필
        _pref = str(expInfo.get('baseline_bpm', '') or '').strip()
        _bbpm_str = ''.join(ch for ch in _pref if ch.isdigit())[:3]
        event.clearEvents()
      Each Frame:
        if _bbpm_mode == 'measure':
            secs_left = max(0, int(_BBPM_MEAS_DUR - t))
            fix_stim.draw()
            msg_stim.text = ('안정 심박수 측정\n\n'
                             '스마트워치(또는 맥박계)로 약 1분간\n'
                             '안정 시 심박수를 측정하세요.\n\n'
                             f'남은 시간: {secs_left}초\n\n'
                             '(스페이스 = 측정을 마치고 값 입력으로)')
            msg_stim.draw()
            _k = event.getKeys(keyList=['space', 'escape'])
            if 'escape' in _k:
                core.quit()
            if 'space' in _k or t >= _BBPM_MEAS_DUR:
                _bbpm_mode = 'entry'
                event.clearEvents()
        else:  # entry — 실험자가 측정값을 직접 타이핑
            q_stim.text = ('측정한 안정 심박수(BPM)를 입력하세요.\n\n'
                           f'입력값:  {_bbpm_str or "_"}\n\n'
                           '숫자 키로 입력 · Backspace 수정 · Enter 확정')
            q_stim.draw()
            for _key in event.getKeys():
                if _key == 'escape':
                    core.quit()
                elif _key in ('return', 'num_enter') and _bbpm_str:
                    continueRoutine = False
                elif _key == 'backspace':
                    _bbpm_str = _bbpm_str[:-1]
                elif _key.isdigit() and len(_bbpm_str) < 3:
                    _bbpm_str += _key
                elif _key.startswith('num_') and _key[4:].isdigit() and len(_bbpm_str) < 3:
                    _bbpm_str += _key[4:]
      End Routine:
        try:
            _bbpm_val = float(_bbpm_str)
        except Exception:
            _bbpm_val = float('nan')
        # covariate 저장: 측정값을 정식 baseline_bpm 으로 사용(다이얼로그 값 대체/보강)
        expInfo['baseline_bpm'] = _bbpm_str
        thisExp.addData('baseline_bpm_measured', _bbpm_val)
        thisExp.addData('baseline_bpm', _bbpm_val)
        outlet.push_sample([f'baseline_bpm:{_bbpm_str}'])
        print(f'[fcf] baseline BPM entered: {_bbpm_str!r} -> {_bbpm_val}')
    TextComponent _keep
      letterHeight = 0.05
      opacity = 0
      saveStartStop = False
      startVal [time (s)] = 0
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  Routine Baseline
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    CodeComponent code_baseline
      Code Type = Py
      Begin Routine:
        # 본 실험 로깅 시작 — onset 0 = baseline 시작 (fNIRS 동기 앵커)
        try:
            _lp = bf.start_logging(thisExp.dataFileName)
            print('[fcf] logging:', _lp)
        except Exception as _e:
            print('[fcf] start_logging failed:', repr(_e))
        bf.set_block_label('baseline')
        bf.set_phase('baseline')
        if audio_mode:
            bf.set_audio(False)
        outlet.push_sample(['baseline'])
        thisExp.addData('phase', 'baseline')
        thisExp.addData('phase_onset', core.getTime())
        _BASE_DUR = 120.0
      Each Frame:
        secs_left = max(0, int(_BASE_DUR - t))
        msg_stim.text = ('안정 구간\n\n손목 맥박에 집중하며 편안히 쉬세요.\n\n'
                         f'남은 시간: {secs_left}초    (스페이스=건너뛰기)')
        msg_stim.draw()
        fix_stim.draw()
        _k = event.getKeys(keyList=['space', 'escape'])
        if 'escape' in _k:
            core.quit()
        if 'space' in _k or t >= _BASE_DUR:
            continueRoutine = False
    TextComponent _keep
      letterHeight = 0.05
      opacity = 0
      saveStartStop = False
      startVal [time (s)] = 0
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  Routine Practice
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    CodeComponent code_practice
      Code Type = Py
      Begin Routine:
        bf.set_block_label('practice')
        bf.set_phase('practice')
        bf.set_fixed_bpm(70)
        if audio_mode:
            bf.set_audio(True)
        outlet.push_sample(['practice'])
        thisExp.addData('phase', 'practice')
        thisExp.addData('phase_onset', core.getTime())
        _PRAC_DUR = 30.0
      Each Frame:
        remain = max(0, int(_PRAC_DUR - t))
        if audio_mode:
            fix_stim.draw()
            msg_stim.text = ('연습\n\n지금 들리는 심장 박동을 들으며\n손목 맥박과 비교해 보세요.\n\n'
                             f'{remain}초')
        else:
            if _ecg_ok:
                ecg_renderer.update(t, 70)
                ecg_renderer.draw()
            msg_stim.text = ('연습\n\n지금 보이는 심장 박동을 보며\n손목 맥박과 비교해 보세요.\n\n'
                             f'{remain}초')
        msg_stim.draw()
        if 'escape' in event.getKeys(keyList=['escape']):
            core.quit()
        if t >= _PRAC_DUR:
            continueRoutine = False
      End Routine:
        if audio_mode:
            bf.set_audio(False)
    TextComponent _keep
      letterHeight = 0.05
      opacity = 0
      saveStartStop = False
      startVal [time (s)] = 0
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  Routine Stimulus
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    CodeComponent code_stim
      Code Type = Py
      Begin Routine:
        cond = block_sequence[block_loop.thisN]
        _stim_bpm = cond['bpm']
        bf.set_block_label(cond['label'])
        bf.set_phase('stim')
        bf.set_fixed_bpm(_stim_bpm)
        if audio_mode:
            bf.set_audio(True)
        outlet.push_sample([cond['label']])   # 조건별 자극 onset 마커 (code 61~65)
        thisExp.addData('phase', 'stim')
        thisExp.addData('phase_onset', core.getTime())
        _STIM_DUR = 30.0
      Each Frame:
        cond = block_sequence[block_loop.thisN]
        remain = max(0, int(_STIM_DUR - t))
        if audio_mode:
            fix_stim.draw()
            msg_stim.text = f'심장 박동을 들으며 손목 맥박과 비교하세요   ({remain}s)'
        else:
            if _ecg_ok:
                ecg_renderer.update(t, _stim_bpm)
                ecg_renderer.draw()
            msg_stim.text = f'심장 박동을 보며 손목 맥박과 비교하세요   ({remain}s)'
        msg_stim.draw()
        status_stim.text = (f'[{block_loop.thisN + 1}/10] {cond["label"]}  '
                            f'bpm={_stim_bpm}  ({"AUD" if audio_mode else "VIS"})')
        status_stim.draw()
        if 'escape' in event.getKeys(keyList=['escape']):
            core.quit()
        if t >= _STIM_DUR:
            continueRoutine = False
      End Routine:
        outlet.push_sample(['stim_off'])
    TextComponent _keep
      letterHeight = 0.05
      opacity = 0
      saveStartStop = False
      startVal [time (s)] = 0
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  Routine Assessment
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    CodeComponent code_assess
      Code Type = Py
      Begin Routine:
        if audio_mode:
            bf.set_audio(False)          # 평가 중 소리 OFF
        bf.set_phase('assess')
        outlet.push_sample(['assess'])
        _qidx = 0
        _qresp = [None, None, None]
        _qrt = [None, None, None]
        _ASSESS_DUR = 20.0
        _q_onset = core.getTime()
        _QTEXTS = [
            ('Q1.  방금 제시된 심장 박동이\n본인의 실제 맥박과 얼마나 일치했습니까?\n\n'
             '1 (전혀 일치하지 않음)   …   7 (매우 일치함)\n\n숫자 키 1–7'),
            ('Q2.  방금 자극이 얼마나 편안했습니까?\n\n'
             '1 (전혀 편안하지 않음)   …   7 (매우 편안함)\n\n숫자 키 1–7'),
            ('Q3.  방금 자극이 얼마나 불편했습니까?\n\n'
             '1 (전혀 불편하지 않음)   …   7 (매우 불편함)\n\n숫자 키 1–7'),
        ]
        event.clearEvents()
      Each Frame:
        if _qidx < 3:
            q_stim.text = _QTEXTS[_qidx]
            q_stim.draw()
        _keys = event.getKeys(keyList=['1', '2', '3', '4', '5', '6', '7', 'escape'])
        if 'escape' in _keys:
            core.quit()
        if _keys and _qidx < 3:
            _qresp[_qidx] = int(_keys[0])
            _qrt[_qidx] = core.getTime() - _q_onset
            outlet.push_sample([f'q{_qidx + 1}:{_qresp[_qidx]}'])
            _qidx += 1
        if _qidx >= 3 or t >= _ASSESS_DUR:
            continueRoutine = False
      End Routine:
        cond = block_sequence[block_loop.thisN]
        _labels = ['Q1_similarity', 'Q2_comfort', 'Q3_discomfort']
        for _i in range(3):
            thisExp.addData(_labels[_i], _qresp[_i])
            thisExp.addData(_labels[_i] + '_rt', _qrt[_i])
        thisExp.addData('block_idx', block_loop.thisN)
        thisExp.addData('cond', cond['cond'])
        thisExp.addData('cond_label', cond['label'])
        thisExp.addData('bpm', cond['bpm'])
        thisExp.addData('deviation_pct', cond['dev'])
        thisExp.addData('is_accel', cond['accel'])
        thisExp.addData('feedback_modality', modality)
        # Q1 이분화 (IV): <=3 discord / >=5 match / ==4 excluded
        _q1 = _qresp[0]
        if _q1 is None:
            _iv = 'NA'
        elif _q1 <= 3:
            _iv = 'discord'
        elif _q1 >= 5:
            _iv = 'match'
        else:
            _iv = 'excluded'
        thisExp.addData('Q1_class', _iv)
        outlet.push_sample(['assess_off'])
    TextComponent _keep
      letterHeight = 0.05
      opacity = 0
      saveStartStop = False
      startVal [time (s)] = 0
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  Routine Rest
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    CodeComponent code_rest
      Code Type = Py
      Begin Routine:
        bf.set_phase('rest')
        outlet.push_sample(['rest'])
        _REST_DUR = float(10.0 + (np.random.rand() * 4.0 - 2.0))   # 10 ± 2 s jitter
        thisExp.addData('rest_dur', round(_REST_DUR, 3))
      Each Frame:
        fix_stim.draw()
        if 'escape' in event.getKeys(keyList=['escape']):
            core.quit()
        if t >= _REST_DUR:
            continueRoutine = False
    TextComponent _keep
      letterHeight = 0.05
      opacity = 0
      saveStartStop = False
      startVal [time (s)] = 0
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  Routine ExitSurvey
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    CodeComponent code_exit
      Code Type = Py
      Begin Routine:
        if audio_mode:
            bf.set_audio(False)
        bf.set_phase('postexp')
        _cred = None
        event.clearEvents()
      Each Frame:
        q_stim.text = ('Q4.  이 실험에서 제시된 심장 박동이\n'
                       '실제 본인의 심장 박동이라고\n어느 정도 믿으셨습니까?\n\n'
                       '1 (전혀 믿지 않음)   …   7 (완전히 믿음)\n\n숫자 키 1–7')
        q_stim.draw()
        _k = event.getKeys(keyList=['1', '2', '3', '4', '5', '6', '7', 'escape'])
        if 'escape' in _k:
            core.quit()
        if _k:
            _cred = int(_k[0])
            outlet.push_sample([f'credibility:{_cred}'])
            thisExp.addData('Q4_credibility', _cred)
            continueRoutine = False
    TextComponent _keep
      letterHeight = 0.05
      opacity = 0
      saveStartStop = False
      startVal [time (s)] = 0
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  Routine Debrief
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    CodeComponent code_debrief
      Code Type = Py
      Begin Routine:
        outlet.push_sample(['experiment_end'])
      Each Frame:
        q_stim.text = ('실험이 끝났습니다.\n\n참여해 주셔서 감사합니다.\n\n'
                       '스페이스바를 누르면 종료됩니다.')
        q_stim.draw()
        if 'space' in event.getKeys(keyList=['space']):
            continueRoutine = False
      End Routine:
        try:
            bf.stop()
        except Exception as _e:
            print('[fcf] bf.stop err:', repr(_e))
    TextComponent _keep
      letterHeight = 0.05
      opacity = 0
      saveStartStop = False
      startVal [time (s)] = 0
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Flow
  Routine Intro
  Routine BaselineBPM
  Routine Baseline
  Routine Practice
  LoopInitiator block_loop loopType="TrialHandler"
    conditions = []
    loopType = sequential
    nReps = 10
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    Routine Stimulus
    Routine Assessment
    Routine Rest
  LoopTerminator block_loop
  Routine ExitSurvey
  Routine Debrief
