PsychoPy2experiment version="2026.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001', 'ppg_port': 'auto'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = (1280, 720)
  color = $[-1,-1,-1]
  expName = fNIRS_HeartFeedback
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine Experimenter_Welcome
    RoutineSettingsComponent Experimenter_Welcome
      color = $[-1,-1,-1]
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    TextComponent text_welcome
      letterHeight = 0.042
      startVal [time (s)] = 0.0
      wrapWidth = 0.88
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      text:
        곧 실험을 시작합니다.

        안내에 따라 편안하게 진행해 주세요.

        준비되면 스페이스바를 눌러주세요.
    KeyboardComponent key_welcome
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent code_2
      Code Type = Py
      Before Experiment:
        import os, sys
        # stdout/stderr를 UTF-8로 강제 (Windows cp949에서 PsychoPy Runner 디코딩 에러 방지)
        try:
            sys.stdout.reconfigure(encoding='utf-8', errors='replace')
            sys.stderr.reconfigure(encoding='utf-8', errors='replace')
        except Exception:
            pass
        print('[psychopy] === Before Experiment (inline) ===')

        # psychopy_experiment 폴더를 sys.path에 (ecg_renderer / biofeedback_inline import용)
        _here = os.path.dirname(os.path.abspath(__file__))
        if _here not in sys.path:
            sys.path.insert(0, _here)

        # 단일 프로세스 biofeedback 코어 (subprocess / LSL inlet 불필요)
        import biofeedback_inline as bf

        # fNIRS 동기용 마커 outlet. pylsl 없으면 더미로 대체.
        class _NullOutlet:
            def push_sample(self, *a, **k):
                pass
        outlet = _NullOutlet()
        try:
            from pylsl import StreamInfo, StreamOutlet
            info = StreamInfo('PsychoPyMarkers', 'Markers', 1, 0, 'string', 'psychopy_markers')
            outlet = StreamOutlet(info)
            print('[psychopy] outlet PsychoPyMarkers created (fNIRS sync)')
        except Exception as _e:
            print(f'[psychopy] LSL outlet unavailable: {_e!r}')

        # 모든 마커 push를 이벤트 CSV에도 기록(snirf 마커 소스). LSL은 그대로 전달.
        class _LoggingOutlet:
            def __init__(self, inner):
                self._inner = inner
            def push_sample(self, x, *a, **k):
                try:
                    self._inner.push_sample(x, *a, **k)
                except Exception:
                    pass
                try:
                    _lab = x[0] if isinstance(x, (list, tuple)) else x
                    bf.log_marker(str(_lab))
                except Exception:
                    pass
        outlet = _LoggingOutlet(outlet)
      Begin Experiment:
        # === 단일 프로세스 biofeedback 시작 ===
        _ppg_port = str(expInfo.get('ppg_port', '') or '').strip()
        _src = 'mock' if _ppg_port.lower() == 'mock' else 'ppg'
        try:
            bf.start(source=_src, ppg_port=_ppg_port, audio_on=True)
            _active = bf.get_active_port() or 'mock'
            expInfo['ppg_port'] = _active
            print(f'[psychopy] bf.start ok (source={_src}, active={_active!r})')
        except Exception as _e:
            import traceback; traceback.print_exc()
            print(f'[psychopy] bf.start FAILED: {_e!r}')

        # === ECG renderer 초기화 ===
        _ecg_init_err = None
        try:
            import ecg_renderer
            ecg_renderer.init(win)
        except Exception as _e:
            import traceback
            _ecg_init_err = f'{_e!r}'
            traceback.print_exc()
            ecg_renderer = None

        # 진단용 status HUD — 운영 시 비활성(_HUD_DEBUG=False)
        # True면 매 프레임 TextStim 텍스처 재생성 → 장시간 후 네이티브 크래시 위험
        _HUD_DEBUG = False
        if _HUD_DEBUG:
            from psychopy import visual as _v
            status_text = _v.TextStim(
                win, name='status_text',
                text='', pos=(0, -0.45), units='height',
                color='yellow', height=0.022,
                alignText='center',
            )
        else:
            class _NullHUD:
                text = ''
                def draw(self, *a, **k):
                    pass
                def setAutoDraw(self, *a, **k):
                    pass
            status_text = _NullHUD()
        # FPS 측정용
        _fps_frames = 0
        _fps_t0 = core.getTime()
        _fps_cur = 0.0
      Each Frame:
        # 단일 프로세스 모드 — LSL inlet 폴링 불필요. 스페이스(key_welcome)로 진행.
      End Routine:
        thisExp.addData('baseline_bpm', expInfo.get('baseline_bpm', 70.0))
  Routine Daily_Screening
    RoutineSettingsComponent Daily_Screening
      color = $[-1,-1,-1]
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    TextComponent text_screening
      letterHeight = 0.036
      startVal [time (s)] = 0.0
      wrapWidth = 0.88
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      text:
        [당일 포함/제외 기준 확인]

        -포함 기준
        ✓ 만 18세 이상 건강한 성인
        ✓ 신경학적·정신과적 질환 없음
        ✓ 심혈관계 약물 미복용 (베타차단제 등)
        ✓ 심혈관계 질환 없음

        -제외 기준
        ✗ 실험 30분 전 격한 운동
        ✗ 실험 30분 전 커피 섭취

        모두 충족 → Y     해당 있음 → N
    KeyboardComponent key_screening
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_screening
      Code Type = Py
      End Routine:
        if key_screening.keys and key_screening.keys[0] == 'n':
            core.quit()
  Routine Experiment_Instruction
    RoutineSettingsComponent Experiment_Instruction
      color = $[-1,-1,-1]
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    TextComponent text_instr
      letterHeight = 0.038
      startVal [time (s)] = 0.0
      wrapWidth = 0.88
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      text:
        [실험 안내]

        지금부터 메트로놈 소리가 들립니다.
        이 소리를 여러분의 심장 박동 소리로
        생각해 주시기 바랍니다.

        실험 중 주의사항:
          · 화면 중앙을 계속 바라봐 주세요
          · 몸을 최대한 움직이지 말아 주세요
          · 편안하게 호흡하세요

        중간에 숫자 질문이 나오면
        키보드 숫자(1~7)로 응답해 주세요.

        실험은 약 30분 진행됩니다.

        준비되셨으면 스페이스바를 누르세요.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_counterbalance
      Code Type = Py
      Begin Experiment:
        try:
            p_num = int(expInfo.get('participant', 0))
        except:
            p_num = 0

        # accel / decel / neutral 3조건 라틴스퀘어 6순서
        orders = [
            [{'block_type': 'accel',   'direction': 'faster'}, {'block_type': 'decel',   'direction': 'slower'}, {'block_type': 'neutral', 'direction': 'same'}],
            [{'block_type': 'accel',   'direction': 'faster'}, {'block_type': 'neutral', 'direction': 'same'},   {'block_type': 'decel',   'direction': 'slower'}],
            [{'block_type': 'decel',   'direction': 'slower'}, {'block_type': 'accel',   'direction': 'faster'}, {'block_type': 'neutral', 'direction': 'same'}],
            [{'block_type': 'decel',   'direction': 'slower'}, {'block_type': 'neutral', 'direction': 'same'},   {'block_type': 'accel',   'direction': 'faster'}],
            [{'block_type': 'neutral', 'direction': 'same'},   {'block_type': 'accel',   'direction': 'faster'}, {'block_type': 'decel',   'direction': 'slower'}],
            [{'block_type': 'neutral', 'direction': 'same'},   {'block_type': 'decel',   'direction': 'slower'}, {'block_type': 'accel',   'direction': 'faster'}],
        ]

        block_sequence = orders[p_num % 6]
        expInfo['assigned_order'] = f"order_{p_num % 6}"
        current_phase_label = 'P2_ramp_end'
  Routine PPG_Setup
    RoutineSettingsComponent PPG_Setup
      color = $[-1,-1,-1]
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    TextComponent text_device
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text = PPG Calibration
      wrapWidth = 0.88
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    CodeComponent code_ppg_setup
      Code Type = Py
      Begin Routine:
        from psychopy import event
        _calib_started = False
        calib_start_t = None
        CALIB_DURATION = 60.0
        _src_status_line = '연결 확인하려면 [R]'
        print('[psychopy] PPG_Setup (experimenter panel) begin', flush=True)
      Each Frame:
        from psychopy import event
        _keys = event.getKeys(keyList=['c', 'r', 's', 'd', 'space'])

        # [C]: 60초 baseline 측정 (재)시작
        if 'c' in _keys:
            if (not _calib_started) or bf.is_calibration_done():
                outlet.push_sample(['calibration_start'])  # fNIRS 동기 마커
                bf.start_calibration()
                calib_start_t = core.getTime()
                _calib_started = True
                print('[psychopy] calibration started', flush=True)

        # [S]: 소리 ON/OFF 토글
        if 's' in _keys:
            _on = bf.toggle_audio()
            print('[psychopy] audio ->', 'ON' if _on else 'OFF', flush=True)

        # [D]: 소리 출력 장치 변경 (이어폰 등으로 라우팅)
        if 'd' in _keys:
            _dev = bf.cycle_audio_device()
            print('[psychopy] audio device ->', _dev, flush=True)

        # [R]: 포트 연결 새로고침/확인
        if 'r' in _keys:
            _st = bf.refresh_source()
            _src_status_line = '연결: ' + str(_st.get('detail', _st))
            print('[psychopy] source refresh:', _st, flush=True)

        _audio_txt = 'ON' if bf.is_audio_on() else 'OFF'
        _dev_txt = bf.get_audio_device_name()
        _src_txt = (str(expInfo.get('ppg_port')) + ' (PPG 실측)') if bf.is_ppg_active() else 'mock (가짜 70 BPM!)'
        if not _calib_started:
            text_device.text = (
                f'[실험자 설정 화면]\n\n'
                f'PPG 소스: {_src_txt}      소리: {_audio_txt}\n'
                f'소리 출력 장치: {_dev_txt}\n'
                f'{_src_status_line}\n'
                f'실측 심박: {bf.get_real_bpm():.1f} BPM   (시각자극 출력 {bf.get_output_bpm():.1f})\n\n'
                f'[C] Baseline 측정    [R] 포트 새로고침\n'
                f'[S] 소리 켜기/끄기    [D] 소리 출력 장치 변경\n'
                f'[Space] 실험 시작'
            )
        elif not bf.is_calibration_done():
            _remaining = max(0, CALIB_DURATION - (core.getTime() - calib_start_t))
            text_device.text = (
                f'Baseline 측정 중...   {_remaining:0.0f}초 남음\n\n'
                f'(참가자: 편안히 휴식, 움직이지 마세요)\n\n'
                f'소리: {_audio_txt} ({_dev_txt})      실시간 출력 BPM: {bf.get_output_bpm():.1f}'
            )
        else:
            _bpm = bf.get_baseline_bpm() or 70.0
            expInfo['baseline_bpm'] = float(_bpm)
            text_device.text = (
                f'Baseline 완료:  {_bpm:.1f} BPM      소리: {_audio_txt}\n'
                f'소리 출력 장치: {_dev_txt}\n\n'
                f'[C] 다시 측정   [R] 포트   [S] 소리   [D] 출력장치   [Space] 시작'
            )

        # ECG/하트 미리보기
        if ecg_renderer is not None:
            try:
                ecg_renderer.update(t, bf.get_output_bpm())
                ecg_renderer.draw()
            except Exception:
                pass

        # [Space]: 실험 진행
        if 'space' in _keys:
            if bf.is_calibration_done() and bf.get_baseline_bpm():
                expInfo['baseline_bpm'] = float(bf.get_baseline_bpm())
            elif 'baseline_bpm' not in expInfo:
                expInfo['baseline_bpm'] = 70.0
            outlet.push_sample(['experiment_start'])  # fNIRS 동기 마커
            print('[psychopy] experiment_start (experimenter pressed Space)', flush=True)
            continueRoutine = False
      End Routine:
        thisExp.addData('baseline_bpm', expInfo.get('baseline_bpm', 70.0))
  Routine TestRun_Instruction_
    RoutineSettingsComponent TestRun_Instruction_
      color = $[-1,-1,-1]
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    TextComponent text_testrun_instr
      letterHeight = 0.045
      startVal [time (s)] = 0.0
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      text:
        [연습 시작]

        지금부터 짧은 연습을 진행합니다.
        실제 실험과 동일한 방식이며,
        중간에 숫자 질문이 나오면 응답해 주세요.

        준비되면 스페이스바를 누르세요.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine TestRun_Phase1
    RoutineSettingsComponent TestRun_Phase1
      color = $[-1,-1,-1]
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    TextComponent fix_test1
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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    CodeComponent code_test1
      Code Type = Py
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      Begin Routine:
        thisExp.addData('phase', 'test_sync')
        thisExp.addData('phase_onset', core.getTime())
        # TestRun에서도 base_bpm 사용 가능하도록
        try:
            base_bpm = float(expInfo.get('baseline_bpm', 70))
        except Exception:
            base_bpm = 70
      Each Frame:
        if ecg_renderer is not None:
            try:
                ecg_renderer.update(t, bf.get_output_bpm())
                ecg_renderer.draw()
                status_text.text = f'TestRun_Phase1  ECG OK  bpm={base_bpm:.0f}  t={t:.1f}'
            except Exception as _e:
                status_text.text = f'ECG draw error: {_e!r}'
        else:
            status_text.text = f'TestRun_Phase1  ECG=None  init_err={_ecg_init_err}'
        status_text.draw()
  Routine TestRun_Likert
    RoutineSettingsComponent TestRun_Likert
      color = $[-1,-1,-1]
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    TextComponent text_testlikert
      letterHeight = 0.042
      startVal [time (s)] = 0.0
      wrapWidth = 0.85
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      text:
        [연습 응답]

        지금 들리는 소리가 실제 심박과
        얼마나 차이나는 것 같나요?

        1 ────────────────── 7
        차이 없음                                 매우 다름

        숫자 키(1~7)를 누르세요.
    KeyboardComponent key_testlikert
      allowedKeys = '1','2','3','4','5','6','7'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Py
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      Begin Experiment:
        thisExp.addData('test_likert_bpm', key_testlikert.keys)
  Routine TestRun_End
    RoutineSettingsComponent TestRun_End
      color = $[-1,-1,-1]
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    TextComponent text
      letterHeight = 0.048
      startVal [time (s)] = 0.0
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      text:
        연습이 끝났습니다.

        잠시 후 본 실험이 시작됩니다.
        편안하게 앉아서 기다려 주세요.

        60초 후 자동으로 넘어갑니다.
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_testrun_end
      Code Type = Py
      Each Frame:
        secs_left = max(0, int(60 - t))
        text.text = f'연습이 끝났습니다.\n\n잠시 후 본 실험이 시작됩니다.\n편안하게 앉아서 기다려 주세요.\n\n{secs_left}초 후 자동으로 넘어갑니다.'
        if t >= 60.0:
            continueRoutine = False
  Routine Stabilization_Rest_
    RoutineSettingsComponent Stabilization_Rest_
      color = $[-1,-1,-1]
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    TextComponent text_stabilize
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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      text:
        시선은 화면 중앙에 고정하고
        잠시 휴식을 취해 주세요.
    CodeComponent code_stabilize
      Code Type = Py
      Begin Experiment:
        text_stabilize.text = '편안하게 쉬세요.\n\n30초 후 실험이 시작됩니다.'
      Begin Routine:
        # 본 실험 시작 — PPG BPM(1Hz) + 이벤트 마커 CSV 로깅 시작
        try:
            _logp = bf.start_logging(thisExp.dataFileName)
            print(f'[psychopy] CSV 로깅 시작: {_logp}')
        except Exception as _e:
            print(f'[psychopy] start_logging FAILED: {_e!r}')
        outlet.push_sample(['stabilization'])
      Each Frame:
        from psychopy import event

        # 30초 카운트다운
        secs_left = max(0, int(30 - t))
        text_stabilize.text = f'편안하게 쉬세요.\n\n{secs_left}초 후 실험이 시작됩니다.'

        # ECG/하트 표시 (참가자 BPM에 동기)
        try:
            _bb = float(expInfo.get('baseline_bpm', 70))
        except Exception:
            _bb = 70.0
        if ecg_renderer is not None:
            try:
                ecg_renderer.update(t, bf.get_output_bpm())
                ecg_renderer.draw()
            except Exception as _e:
                status_text.text = f'ECG draw error: {_e!r}'
                status_text.draw()

        _sk = event.getKeys()
        if t >= 30.0 or 'space' in _sk or 'q' in _sk:
            continueRoutine = False
  Routine Baseline
    RoutineSettingsComponent Baseline
      color = $[-1,-1,-1]
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    TextComponent fix_baseline
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    CodeComponent baseline
      Code Type = Py
      Begin Routine:
        outlet.push_sample(['baseline'])
        thisExp.addData('phase', 'baseline')
        thisExp.addData('phase_onset', core.getTime())
        try:
            base_bpm = float(expInfo.get('baseline_bpm', 70))
        except Exception:
            base_bpm = 70
      Each Frame:
        if 'q' in event.getKeys(keyList=['q']):
            print('[PSYCHOPY] [Q] skip -> next phase (Baseline)', flush=True)
            continueRoutine = False
        # Baseline 동안 ECG/하트 표시 (참가자 baseline BPM)
        if ecg_renderer is not None:
            try:
                ecg_renderer.update(t, bf.get_output_bpm())
                ecg_renderer.draw()
                status_text.text = f'Baseline  bpm={base_bpm:.0f}  t={t:.1f}'
            except Exception as _e:
                status_text.text = f'ECG draw error: {_e!r}'
        else:
            status_text.text = f'Baseline  ECG=None  init_err={_ecg_init_err}'
        status_text.draw()
  Routine Phase1_Sync
    RoutineSettingsComponent Phase1_Sync
      color = $[-1,-1,-1]
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    TextComponent fix_p1
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    CodeComponent code_p1
      Code Type = Py
      Begin Routine:
        # CRITICAL: routineTimer 강제 리셋 (non-slip 누적 방지 — while loop 진입 보장)
        routineTimer.reset()
        try:
            idx = block_loop.thisN if hasattr(block_loop, 'thisN') else 0
            block_type = block_sequence[idx]['block_type']
            direction = block_sequence[idx]['direction']
            print(f'[PSYCHOPY] Phase1_Sync block[{idx+1}/3]={block_type} begin', flush=True)
            outlet.push_sample([block_type])
            outlet.push_sample(['P1_sync'])
            bf.set_block_type(block_type)
            block_target_pct = bf.get_target_pct()
            block_direction = {'accel': 'increase', 'decel': 'decrease'}.get(block_type, 'none')
            thisExp.addData('block_type', block_type)
            thisExp.addData('block_target_pct', block_target_pct)
            thisExp.addData('block_direction', block_direction)
            thisExp.addData('block_idx', idx)
            thisExp.addData('phase', 'P1_sync')
            thisExp.addData('phase_onset', core.getTime())
            try:
                base_bpm = float(expInfo.get('baseline_bpm', 70))
            except:
                base_bpm = 70
            current_phase_label = 'P2_ramp_end'
        except Exception as _e:
            print(f'[PSYCHOPY ERROR] Phase1_Sync Begin Routine: {_e!r}', flush=True)
            import traceback; traceback.print_exc()
            idx = 0
            block_type = 'neutral'
            direction = 'same'
            block_target_pct = 0.0
            block_direction = 'none'
            base_bpm = 70
            current_phase_label = 'P2_ramp_end'
      Each Frame:
        # status_text는 ECG와 분리 — ECG 예외에도 status는 항상 갱신/표시
        if 'q' in event.getKeys(keyList=['q']):
            print('[PSYCHOPY] [Q] skip -> next phase (Phase1_Sync)', flush=True)
            continueRoutine = False
        status_text.text = f'P1_sync  block[{idx+1}/3]={block_type}  bpm={base_bpm:.0f}  t={t:.1f}/60s  (60초 후 자동 진행)'
        try:
            thisExp.addData('actual_bpm', bf.get_real_bpm())
            thisExp.addData('actual_bpm_t', t)
        except Exception as _e:
            print(f'[PSYCHOPY] P1 bpm log err: {_e!r}', flush=True)
        try:
            if ecg_renderer is not None:
                ecg_renderer.update(t, bf.get_output_bpm())
                ecg_renderer.draw()
        except Exception as _e:
            print(f'[PSYCHOPY] P1 ECG err: {_e!r}', flush=True)
            status_text.text = f'P1_sync  ECG ERROR: {_e!r}  t={t:.1f}/60s'
        status_text.draw()
      End Routine:
        print(f'[PSYCHOPY] Phase1_Sync END (60s reached). Moving to ramp_loop -> Phase2_Mini_')
  Routine Phase2_Mini_
    RoutineSettingsComponent Phase2_Mini_
      color = $[-1,-1,-1]
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    TextComponent fix_mini
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    CodeComponent code_mini
      Code Type = Py
      Begin Experiment:
        mini_epoch_count = 0
      Begin Routine:
        # CRITICAL: routineTimer 강제 리셋
        routineTimer.reset()
        try:
            outlet.push_sample(['P2_ramp'])
            mini_epoch_count += 1
            if mini_epoch_count == 1:
                bf.start_ramp()
            elapsed_total = (mini_epoch_count - 1) * 20
            print(f'[PSYCHOPY] Phase2_Mini_ ep{mini_epoch_count}/9 begin', flush=True)
            try:
                base_bpm = float(expInfo.get('baseline_bpm', 70))
            except:
                base_bpm = 70
            # idx와 block_type은 Phase1_Sync에서 설정됨
            if 'idx' not in dir() or 'block_type' not in dir():
                idx = block_loop.thisN if hasattr(block_loop, 'thisN') else 0
                block_type = block_sequence[idx]['block_type']
            mismatch_now = min(25.0, (elapsed_total / 180.0) * 25.0)
            if block_type == 'accel':
                current_bpm = base_bpm * (1 + mismatch_now / 100.0)
            elif block_type == 'decel':
                current_bpm = base_bpm * (1 - mismatch_now / 100.0)
            else:
                mismatch_now = 0.0
                current_bpm = base_bpm
            thisExp.addData('phase', 'P2_ramp')
            thisExp.addData('epoch_num', mini_epoch_count)
            thisExp.addData('mismatch_pct', round(mismatch_now, 2))
            signed_mismatch = mismatch_now if block_type == 'accel' else (-mismatch_now if block_type == 'decel' else 0.0)
            thisExp.addData('signed_mismatch_pct', round(signed_mismatch, 2))
            thisExp.addData('manip_pct_actual', round(bf.get_manipulation_pct(), 2))
            thisExp.addData('manip_state', bf.get_manipulator_state())
            thisExp.addData('block_target_pct', bf.get_target_pct())
            thisExp.addData('current_bpm', round(current_bpm, 2))
            thisExp.addData('block_type', block_type)
            thisExp.addData('phase_onset', core.getTime())
        except Exception as _e:
            print(f'[PSYCHOPY ERROR] Phase2_Mini_ Begin Routine: {_e!r}')
            import traceback; traceback.print_exc()
            # fallback 값으로 진행 (창 닫지 않음)
            base_bpm = 70
            current_bpm = 70
            mismatch_now = 0.0
            block_type = 'neutral'
            idx = 0
      Each Frame:
        if 'q' in event.getKeys(keyList=['q']):
            print('[PSYCHOPY] [Q] skip -> next phase (whole Phase2 ramp_loop)', flush=True)
            ramp_loop.finished = True
            continueRoutine = False
        status_text.text = f'P2_ramp  block[{idx+1}/3]={block_type}  ep{mini_epoch_count}/9  bpm={current_bpm:.0f}  mismatch={mismatch_now:.0f}%  t={t:.1f}/20s'
        try:
            thisExp.addData('actual_bpm', bf.get_real_bpm())
            thisExp.addData('actual_bpm_t', t)
        except Exception as _e:
            print(f'[PSYCHOPY] P2 bpm log err: {_e!r}', flush=True)
        try:
            if ecg_renderer is not None:
                ecg_renderer.update(t, bf.get_output_bpm())
                ecg_renderer.draw()
        except Exception as _e:
            print(f'[PSYCHOPY] P2 ECG err: {_e!r}', flush=True)
        status_text.draw()
  Routine Likert_InBlock_
    RoutineSettingsComponent Likert_InBlock_
      color = $[-1,-1,-1]
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    TextComponent text_inblock
      letterHeight = 0.042
      startVal [time (s)] = 0.0
      wrapWidth = 0.85
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      text:
        지금 들리는 소리가 실제 심박과
        얼마나 다른 것 같나요?

        1 ────────────────── 7
        차이 없음                                 매우 다름

        숫자 키(1~7)를 누르세요.
    KeyboardComponent key_inblock
      allowedKeys = '1','2','3','4','5','6','7'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent Likert_InBlock
      Code Type = Py
      Begin Routine:
        # 참가자 창의 ECG를 숨기고 Likert 텍스트를 표시하라고 biofeedback에 알림
        _likert_msg = text_inblock.text.replace('\n', '  ')
        outlet.push_sample([f'likert_on:{_likert_msg}'])
      End Routine:
        outlet.push_sample(['likert_off'])  # 참가자 창 ECG 복원
        thisExp.addData('likert_bpm_inblock', key_inblock.keys)
        thisExp.addData('likert_epoch', mini_epoch_count)
        thisExp.addData('likert_time', core.getTime())
        thisExp.addData('likert_phase', current_phase_label)
        thisExp.addData('block_type', block_type)
  Routine Phase3_Plateau
    RoutineSettingsComponent Phase3_Plateau
      color = $[-1,-1,-1]
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    TextComponent fix_p3
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 45
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    CodeComponent phase3_plateau
      Code Type = Py
      Begin Routine:
        routineTimer.reset()
        outlet.push_sample(['P3_plateau'])
        print(f'[PSYCHOPY] Phase3_Plateau begin', flush=True)
        current_phase_label = 'P3_plateau_end'
        thisExp.addData('phase', 'P3_plateau')
        thisExp.addData('mismatch_pct', 25.0 if block_type != 'neutral' else 0.0)
        thisExp.addData('signed_mismatch_pct', bf.get_target_pct())
        thisExp.addData('manip_pct_actual', round(bf.get_manipulation_pct(), 2))
        thisExp.addData('manip_state', bf.get_manipulator_state())
        thisExp.addData('block_target_pct', bf.get_target_pct())
        thisExp.addData('block_direction', {'accel': 'increase', 'decel': 'decrease'}.get(block_type, 'none'))
        thisExp.addData('phase_onset', core.getTime())
        try:
            base_bpm = float(expInfo.get('baseline_bpm', 70))
        except:
            base_bpm = 70
        if block_type == 'accel':
            plateau_bpm = base_bpm * 1.25
        elif block_type == 'decel':
            plateau_bpm = base_bpm * 0.75
        else:
            plateau_bpm = base_bpm
      Each Frame:
        if 'q' in event.getKeys(keyList=['q']):
            print('[PSYCHOPY] [Q] skip -> next phase (Phase3_Plateau)', flush=True)
            continueRoutine = False
        status_text.text = f'P3_plateau  block[{idx+1}/3]={block_type}  bpm={plateau_bpm:.0f}  t={t:.1f}/45s'
        try:
            thisExp.addData('actual_bpm', bf.get_real_bpm())
            thisExp.addData('actual_bpm_t', t)
        except Exception as _e:
            print(f'[PSYCHOPY] P3 bpm log err: {_e!r}', flush=True)
        try:
            if ecg_renderer is not None:
                ecg_renderer.update(t, bf.get_output_bpm())
                ecg_renderer.draw()
        except Exception as _e:
            print(f'[PSYCHOPY] P3 ECG err: {_e!r}', flush=True)
        status_text.draw()
  Routine Phase4_Recovery
    RoutineSettingsComponent Phase4_Recovery
      color = $[-1,-1,-1]
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    TextComponent fix_p4
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    CodeComponent phase4_recovery
      Code Type = Py
      Begin Routine:
        routineTimer.reset()
        outlet.push_sample(['P4_recovery'])
        print(f'[PSYCHOPY] Phase4_Recovery begin', flush=True)
        bf.stop_ramp()
        thisExp.addData('phase', 'P4_recovery')
        thisExp.addData('mismatch_pct', 0.0)
        thisExp.addData('phase_onset', core.getTime())
        mini_epoch_count = 0
        try:
            base_bpm = float(expInfo.get('baseline_bpm', 70))
        except Exception:
            base_bpm = 70
        # --- 블록 요약: 이 블록에서 적용된 조작 정도 (몇 % 증가/감소) ---
        _tp = bf.get_target_pct()
        thisExp.addData('summary_block_idx', idx)
        thisExp.addData('summary_block_type', block_type)
        thisExp.addData('summary_target_pct', _tp)
        thisExp.addData('summary_direction', {'accel': 'increase', 'decel': 'decrease'}.get(block_type, 'none'))
        thisExp.addData('summary_baseline_bpm', round(base_bpm, 2))
        thisExp.addData('summary_plateau_bpm', round(base_bpm * (1 + _tp / 100.0), 2))
        thisExp.addData('summary_peak_mismatch_pct', _tp)
      Each Frame:
        if 'q' in event.getKeys(keyList=['q']):
            print('[PSYCHOPY] [Q] skip -> next phase (Phase4_Recovery)', flush=True)
            continueRoutine = False
        status_text.text = f'P4_recovery  block[{idx+1}/3]={block_type}  bpm={base_bpm:.0f}  t={t:.1f}/60s'
        try:
            thisExp.addData('actual_bpm', bf.get_real_bpm())
            thisExp.addData('actual_bpm_t', t)
        except Exception as _e:
            print(f'[PSYCHOPY] P4 bpm log err: {_e!r}', flush=True)
        try:
            if ecg_renderer is not None:
                ecg_renderer.update(t, bf.get_output_bpm())
                ecg_renderer.draw()
        except Exception as _e:
            print(f'[PSYCHOPY] P4 ECG err: {_e!r}', flush=True)
        status_text.draw()
  Routine Rest_Between_Blocks
    RoutineSettingsComponent Rest_Between_Blocks
      color = $[-1,-1,-1]
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    TextComponent text_rest
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 90
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      text:
        잠시 휴식하세요.
    CodeComponent Rest_Between_Blocks_2
      Code Type = Py
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      Begin Routine:
        # 마지막 블록(3번째, index=2)이면 휴식 건너뜀
        if block_loop.thisN >= 2:
            continueRoutine = False
        else:
            outlet.push_sample(['rest'])
      Each Frame:
        from psychopy import event

        # 90초 카운트다운 실시간 계산
        secs_left = max(0, int(90 - t))
        text_rest.text = f'잠시 휴식하세요.\n\n{secs_left}초 후 계속됩니다.'

        # 90초가 모두 경과했거나, 스페이스바를 누르면 안전하게 다음 블록으로 전환
        _rk = event.getKeys()
        if t >= 90.0 or 'space' in _rk or 'q' in _rk:
            continueRoutine = False
  Routine PostExp_Likert_BPM
    RoutineSettingsComponent PostExp_Likert_BPM
      color = $[-1,-1,-1]
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    TextComponent text_post_bpm
      letterHeight = 0.042
      startVal [time (s)] = 0.0
      wrapWidth = 0.85
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      text:
        [실험 후 질문 1/2]

        실험 전체에서 들으셨던 메트로놈 소리가
        실제 심장 박동과 얼마나 달랐나요?

        1 ────────────────── 7
        차이 없음                                 매우 다름

        숫자 키(1~7)를 누르세요.
    KeyboardComponent key_post_bpm
      allowedKeys = '1','2','3','4','5','6','7'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent PostExp_Likert_BPM_2
      Code Type = Py
      Begin Routine:
        outlet.push_sample(['postexp_bpm'])
      End Routine:
        thisExp.addData('postexp_likert_bpm', key_post_bpm.keys)
  Routine PostExp_Likert_Trust
    RoutineSettingsComponent PostExp_Likert_Trust
      color = $[-1,-1,-1]
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    TextComponent text_post_trust
      letterHeight = 0.042
      startVal [time (s)] = 0.0
      wrapWidth = 0.85
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      text:
        [실험 후 질문 2/2]

        실험 중 들으셨던 메트로놈 피드백은
        얼마나 믿을만했나요?

        <해당 피드백은 믿을만했는가?>

        1 ────────────────── 7
        차이 없음                                 매우 다름

        숫자 키(1~7)를 누르세요.
    KeyboardComponent key_post_trust
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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      allowedKeys:
        '1','2','3','4','5','6','7'
    CodeComponent PostExp_Likert_Trust_2
      Code Type = Py
      Begin Routine:
        outlet.push_sample(['postexp_trust'])
      End Routine:
        thisExp.addData('postexp_likert_trust', key_post_trust.keys)
  Routine MAIA_Instruction
    RoutineSettingsComponent MAIA_Instruction
      color = $[-1,-1,-1]
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    TextComponent MAIA__Instruction
      letterHeight = 0.042
      startVal [time (s)] = 0.0
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      text:
        [설문 안내]

        이제 신체 감각에 관한 설문을 진행합니다.
        총 24문항입니다.

        각 문항을 읽고 자신에게 해당하는 정도를
        0(전혀 아니다) ~ 5(항상 그렇다)으로
        0 / 1 / 2 / 3 / 4 / 5 키를 눌러 응답해 주세요.

        준비되면 스페이스바를 누르세요.
    KeyboardComponent MAIA___Instruction
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine MAIA_Survey_
    RoutineSettingsComponent MAIA_Survey_
      color = $[-1,-1,-1]
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    SliderComponent maia_slider
      font = Noto Sans
      forceEndRoutine = True
      granularity = 0
      labels = 0, 1, 2, 3, 4, 5
      letterHeight = 0.05
      pos = (0, -0.2)
      size = (0.85, 0.07)
      startVal [time (s)] = 0.0
      storeHistory = True
      styles = rating
      ticks = 0, 1, 2, 3, 4, 5
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    CodeComponent maia_survey
      Code Type = Py
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      Begin Routine:
        if getattr(maia_loop, 'thisN', 0) == 0:
            outlet.push_sample(['maia_start'])
        event.clearEvents()  # 직전 Likert(1~7) 잔여 키가 문항1을 스킵시키는 문제 방지
        maia_slider.reset()
      Each Frame:
        keys = event.getKeys(['0','1','2','3','4','5'])
        if keys:
            maia_slider.rating = int(keys[0])
            maia_slider.markerPos = int(keys[0])
            continueRoutine = False
      End Routine:
        thisExp.addData('maia_item_num', item_num)
        thisExp.addData('maia_subscale', subscale)
        thisExp.addData('maia_rating', maia_slider.getRating())
        maia_slider.reset()
    TextComponent label_left
      font = Malgun Gothic
      letterHeight = 0.04
      pos = (-0.42, -0.35)
      startVal [time (s)] = 0.0
      text = 전혀 아니다
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    TextComponent label_right
      font = Malgun Gothic
      letterHeight = 0.04
      pos = (0.42, -0.35)
      startVal [time (s)] = 0.0
      text = 항상 그렇다
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    TextComponent MAIA_item_text
      font = Malgun Gothic
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $f"문항 {item_num} / 24\n\n{item_text}"
  Routine Debrief
    RoutineSettingsComponent Debrief
      color = $[-1,-1,-1]
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    TextComponent text_debrief
      letterHeight = 0.038
      startVal [time (s)] = 0.0
      wrapWidth = 0.88
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      text:
        [디브리핑]

        실험에 참여해주셔서 감사합니다.

        사실 오늘 들으셨던 메트로놈 소리는
        실제 심장 박동 소리가 아닌,
        인위적으로 조작된 신호였습니다.

        이 연구는 외부에서 주어진 가짜 신체 신호가
        전두엽 뇌 활동과 내수용 감각에
        어떤 영향을 미치는지 연구합니다.

        궁금한 점이 있으시면
        실험자에게 자유롭게 질문해 주세요.

        수고하셨습니다.

        [스페이스바] 종료
    KeyboardComponent debief
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_debrief
      Code Type = Py
      End Routine:
        outlet.push_sample(['experiment_end'])
        try:
            bf.stop()
        except Exception:
            pass
Flow
  Routine PPG_Setup
  Routine Experimenter_Welcome
  Routine Daily_Screening
  Routine Experiment_Instruction
  Routine TestRun_Instruction_
  Routine TestRun_Phase1
  Routine TestRun_Likert
  Routine TestRun_End
  Routine Stabilization_Rest_
  Routine Baseline
  LoopInitiator block_loop loopType="TrialHandler"
    loopType = sequential
    nReps = 3
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    Routine Phase1_Sync
    LoopInitiator ramp_loop loopType="TrialHandler"
      loopType = sequential
      nReps = 9
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      Routine Phase2_Mini_
    LoopTerminator ramp_loop
    Routine Likert_InBlock_
    Routine Phase3_Plateau
    Routine Likert_InBlock_
    Routine Phase4_Recovery
    Routine Rest_Between_Blocks
  LoopTerminator block_loop
  Routine PostExp_Likert_BPM
  Routine PostExp_Likert_Trust
  Routine MAIA_Instruction
  LoopInitiator maia_loop loopType="TrialHandler"
    conditionsFile = conditions/maia_items.xlsx
    loopType = sequential
    nReps = 1
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    Routine MAIA_Survey_
  LoopTerminator maia_loop
  Routine Debrief
